PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'Age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Save wide csv file = False
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1536, 864]
  expName = StroopTestButtons1
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      color [set every repeat] = $Color
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $Word
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    ButtonComponent button_red
      bold = True
      forceEndRoutine = True
      pos = (-.8, -.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = Red
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    ButtonComponent button_blue
      bold = True
      forceEndRoutine = True
      pos = (-.4, -.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = Blue
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    ButtonComponent button_green
      bold = True
      forceEndRoutine = True
      pos = (0, -.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = Green
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    ButtonComponent button_yellow
      bold = True
      forceEndRoutine = True
      pos = (.4, -.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = Yellow
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    ButtonComponent button_purple
      bold = True
      forceEndRoutine = True
      pos = (.8, -.5)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = Purple
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  Routine Instructions
    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Click the button for the color of the given word, NOT for the word itself.
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    ButtonComponent button_start
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -.5)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text = START
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = StroopTestStimuliButtons1.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'Word': 'red', 'Color': 'red', 'isCongruent': 1, 'corrAns': 'button_red'},
      {'Word': 'red', 'Color': 'blue', 'isCongruent': 0, 'corrAns': 'button_blue'},
      {'Word': 'red', 'Color': 'green', 'isCongruent': 0, 'corrAns': 'button_green'},
      {'Word': 'red', 'Color': 'yellow', 'isCongruent': 0, 'corrAns': 'button_yellow'},
      {'Word': 'red', 'Color': 'purple', 'isCongruent': 0, 'corrAns': 'button_purple'},
      {'Word': 'blue', 'Color': 'red', 'isCongruent': 0, 'corrAns': 'button_red'},
      {'Word': 'blue', 'Color': 'blue', 'isCongruent': 1, 'corrAns': 'button_blue'},
      {'Word': 'blue', 'Color': 'green', 'isCongruent': 0, 'corrAns': 'button_green'},
      {'Word': 'blue', 'Color': 'yellow', 'isCongruent': 0, 'corrAns': 'button_yellow'},
      {'Word': 'blue', 'Color': 'purple', 'isCongruent': 0, 'corrAns': 'button_purple'},
      {'Word': 'green', 'Color': 'red', 'isCongruent': 0, 'corrAns': 'button_red'},
      {'Word': 'green', 'Color': 'blue', 'isCongruent': 0, 'corrAns': 'button_blue'},
      {'Word': 'green', 'Color': 'green', 'isCongruent': 1, 'corrAns': 'button_green'},
      {'Word': 'green', 'Color': 'yellow', 'isCongruent': 0, 'corrAns': 'button_yellow'},
      {'Word': 'green', 'Color': 'purple', 'isCongruent': 0, 'corrAns': None},
      {'Word': 'yellow', 'Color': 'red', 'isCongruent': 0, 'corrAns': 'button_red'},
      {'Word': 'yellow', 'Color': 'blue', 'isCongruent': 0, 'corrAns': 'button_blue'},
      {'Word': 'yellow', 'Color': 'green', 'isCongruent': 0, 'corrAns': 'button_green'},
      {'Word': 'yellow', 'Color': 'yellow', 'isCongruent': 1, 'corrAns': 'button_yellow'}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
    Routine trial
  LoopTerminator trials
